PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Save log file = False
  expName = self_paced_reading
  Screen = 1
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Routines
  Routine follow_up
    RatingScaleComponent rating
      pos = 0, 0
      high = 100
      startVal [time (s)] = 0.0
      disappear = True
      size = 1.0
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
      scaleDescription = How did the sentence sound?
      singleClick = True
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  Routine end
    TextComponent text_end
      stopVal [duration (s)] = 1.0
      text = Thank you
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fix
    TextComponent text_fix
      color = red
      stopVal [duration (s)] = 0.5
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine w5
    TextComponent text_w5
      pos = (0.3, 0)
      text [set every repeat] = $w5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_w5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine w4
    TextComponent text_w4
      pos = (0.1, 0)
      text [set every repeat] = $w4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_w4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine w3
    TextComponent text_w3
      pos = (0.0, 0)
      text [set every repeat] = $w3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_w3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine w2
    TextComponent text_w2
      pos = (-0.2, 0)
      text [set every repeat] = $w2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_w2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine w1
    TextComponent text_w1
      pos = (-0.3, 0)
      text [set every repeat] = $w1
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_w1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = first key
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  Routine instructions
    TextComponent text_ins
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Read the sentences.

        Use the spacebar to advance.
    KeyboardComponent key_resp_ins
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_file.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'status': u'pos', 'w5': u'apple', 'w4': u'an', 'w3': u'eats', 'w2': u'boy', 'w1': u'the'},
      {'status': u'pos', 'w5': u'letter', 'w4': u'a', 'w3': u'writes', 'w2': u'girl', 'w1': u'the'},
      {'status': u'impos', 'w5': u'banana', 'w4': u'a', 'w3': u'devours', 'w2': u'computer', 'w1': u'the'},
      {'status': u'impos', 'w5': u'table', 'w4': u'a', 'w3': u'grab', 'w2': u'fences', 'w1': u'the'}]
    Routine fix
    Routine w1
    Routine w2
    Routine w3
    Routine w4
    Routine w5
    Routine follow_up
  LoopTerminator trials
  Routine end
